PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop_alimentario
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent jitter
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine food1
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    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $CalorieLabels
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  Routine blank
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A continuacion verá una serie de imagenes de alimentos acompañados por la palabra bajas calorias o altas calorias.

        Debera responder  usando F si el alimento es alto en calorias y J si es bajo en calorias.

        Debe responder al alimento ignorando la palabra que aparece en la imagen

        Para comenzar presione la barra espaciadora
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Muchas gracias por participar del esperimento.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/APIO.png'), ('CalorieLabels', 'bajas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/ARROZ.png'), ('CalorieLabels', 'bajas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/AZUCAR.png'), ('CalorieLabels', 'altas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/BACON.png'), ('CalorieLabels', 'altas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/BAYAS.png'), ('CalorieLabels', 'bajas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/BROCOLI.png'), ('CalorieLabels', 'bajas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/BROWNIE.png'), ('CalorieLabels', 'altas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/CARAMELOS.png'), ('CalorieLabels', 'altas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/CEBOLLAS.png'), ('CalorieLabels', 'bajas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/CEREZAS.png'), ('CalorieLabels', 'bajas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/CHAMPINONES.png'), ('CalorieLabels', 'bajas calorias')]),
      OrderedDict([('Congruency', 'congruente'), ('ImageFile', '/images/CHOCOLATE.png'), ('CalorieLabels', 'altas calorias')])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
    Routine trial
    Routine food1
    Routine blank
  LoopTerminator trials
  Routine Thanks
